'<ADbasic Header, Headerversion 001.001>
' Process_Number                 = 1
' Initial_Processdelay           = 3000
' Eventsource                    = External
' Control_long_Delays_for_Stop   = No
' Priority                       = High
' Version                        = 1
' ADbasic_Version                = 6.3.1
' Optimize                       = Yes
' Optimize_Level                 = 1
' Stacksize                      = 1000
' Info_Last_Save                 = NIGHTSHADE  NIGHTSHADE\labadmin
'<Header End>
#Include ADwinPro_All.Inc

dim pattern as long

INIT:
  pattern = 0
  PROCESSDELAY = Calc_Processdelay(1) ' Set to 1 Hz
  CPU_EVENT_CONFIG(0,1,1)
  DigProg1(1,65535)

EVENT:
  ' Alternate digital 32 on and off
  if (pattern = 0) then
    pattern = Shift_Left(1, 31)
  else
    pattern = 0
  endif
  
  Dig_WriteLatch32(1, pattern)
  Dig_Latch(1)
